CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "_Probabilities")
    Name to assign these images:Raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_Probabilities")
    Name to assign these images:Probability
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Raw
    Name the output image:Enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Circles
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Enhanced
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):200,500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:8|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
    Select the objects to filter:Cells
    Name the output objects:Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:1500
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Probability
    Name the primary objects to be identified:Lysosomes
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
OverlayObjects:[module_num:10|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
    Input:Enhanced
    Name the output image:OverlayObjects
    Objects:Lysosomes
    Opacity:0.7

RelateObjects:[module_num:11|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
    Parent objects:Filtered
    Child objects:Lysosomes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
DisplayDensityPlot:[module_num:12|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enabled:False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
    Select the object to display on the X-axis:Lysosomes
    Select the object measurement to plot on the X-axis:Number_Object_Number
    Select the object to display on the Y-axis:Cells
    Select the object measurement to plot on the Y-axis:Number_Object_Number
    Select the grid size:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:jet
    Enter a title for the plot, if desired:Plot

DisplayScatterPlot:[module_num:13|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enabled:False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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Cells
    Select the measurement to plot on the X-axis:Number_Object_Number
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Lysosomes
    Select the measurement to plot on the Y-axis:Children_Lysosomes_Count
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Plot2

DisplayDataOnImage:[module_num:14|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Cells
    Measurement to display:Children_Lysosomes_Count
    Select the image on which to display the measurements:Enhanced
    Text color:blue
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):5
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Research\\Project_Lysosomes\\DataAnalysis\\PixelClassification\\Pericytes
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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